<?xml version="1.0" encoding="ISO-8859-1"?>
<illumination_settings>

  <control_modules>

    <!-- <control_module> -->
    <!--   <name>obis</name> -->
    <!--   <module_name>sc_hardware.coherent.obis</module_name> -->
    <!--   <class_name>Obis</class_name> -->
    <!--   <parameters> -->
    <!--   	<port type="string">COM5</port> -->
    <!--   </parameters> -->
    <!-- </control_module> -->

    <control_module>
      <name>obis405</name>
      <module_name>sc_hardware.coherent.hLaser</module_name>
      <class_name>CoherentObis</class_name>
      <parameters>
    	<port type="string">COM5</port>
      </parameters>
    </control_module>

    <control_module>
      <name>daq</name>
      <module_name>sc_hardware.nationalInstruments.hNicontrol</module_name>
      <class_name>Nidaq</class_name>
      <parameters>
	<counter_board>PCI-6221</counter_board>
	<counter_id type="int">0</counter_id>
	<counter_trigger type="int">0</counter_trigger>
	<waveform_clock>ctr0out</waveform_clock>
      </parameters>
    </control_module>
  </control_modules>

  <channels>

    <!-- 405 laser -->
    <channel>
      <description>405</description>
      <color type="rgb">255,0,255</color>

      <!-- <amplitude_modulation> -->
      <!-- 	<uses>AOTF</uses> -->
      <!-- 	<display_normalized type="boolean">True</display_normalized> -->
      <!-- 	<parameters> -->
      <!-- 	  <maximum type="int">6400</maximum> -->
      <!-- 	  <channel type="int">0</channel> -->
      <!-- 	  <off_frequency type="float">20.0</off_frequency> -->
      <!-- 	  <on_frequency type="float">107.71</on_frequency> -->
      <!-- 	</parameters> -->
      <!-- </amplitude_modulation> -->

      <!-- self.display_normalized = channel.amplitude_modulation.display_normalized -->
      <!-- self.min_amplitude = self.amplitude_modulation.getMinAmplitude(self.channel_id) -->
      <!-- self.max_amplitude = self.amplitude_modulation.getMaxAmplitude(self.channel_id) -->
      <!-- self.amplitude_range = float(self.max_amplitude - self.min_amplitude) -->
      <!-- self.channel_ui = illuminationChannelUI.ChannelUIAdjustable(self.name, -->
      <!--                                                             channel.color, -->
      <!--                                                             self.min_amplitude, -->
      <!--                                                             self.max_amplitude, -->
      <!--                                                             channels_box) -->

      <amplitude_modulation>
      	<uses>obis405</uses>
      	<display_normalized type="boolean">True</display_normalized>
      	<parameters>
      	  <maximum type="float">1.0</maximum>
      	  <minimum type="float">0.0</minimum>
      	</parameters>
      </amplitude_modulation>

      <digital_modulation>
      	<uses>daq</uses>
      	<parameters>
      	  <board>PCI-6221</board>
      	  <channel type="int">0</channel>
      	  <max_voltage type="float">1.0</max_voltage>
      	  <min_voltage type="float">0.0</min_voltage>
      	</parameters>
      </digital_modulation>

      <mechanical_shutter>
	<uses>daq</uses>
	<parameters>
	  <board>PCI-6221</board>
	  <channel type="int">0</channel>
	</parameters>
      </mechanical_shutter>

    </channel>

    <!-- <!-\- 488 laser -\-> -->
    <!-- <channel> -->
    <!--   <description>488</description> -->
    <!--   <color type="rgb">0,255,255</color> -->
    <!--   <analog_modulation> -->
    <!-- 	<uses>daq</uses> -->
    <!-- 	<parameters> -->
    <!-- 	  <board>PCI-6221</board> -->
    <!-- 	  <channel type="int">1</channel> -->
    <!-- 	  <max_voltage type="float">1.0</max_voltage> -->
    <!-- 	  <min_voltage type="float">0.0</min_voltage> -->
    <!-- 	</parameters> -->
    <!--   </analog_modulation> -->

    <!--   <mechanical_shutter> -->
    <!-- 	<uses>daq</uses> -->
    <!-- 	<parameters> -->
    <!-- 	  <board>PCI-6221</board> -->
    <!-- 	  <channel type="int">1</channel> -->
    <!-- 	</parameters> -->
    <!--   </mechanical_shutter> -->

    <!-- </channel> -->

    <!-- <!-\- 561 laser -\-> -->
    <!-- <channel> -->
    <!--   <description>561</description> -->
    <!--   <color type="rgb">255,255,0</color> -->
      
    <!--   <analog_modulation> -->
    <!-- 	<uses>daq</uses> -->
    <!-- 	<parameters> -->
    <!-- 	  <board>PCI-6221</board> -->
    <!-- 	  <channel type="int">2</channel> -->
    <!-- 	  <max_voltage type="float">1.0</max_voltage> -->
    <!-- 	  <min_voltage type="float">0.0</min_voltage> -->
    <!-- 	</parameters> -->
    <!--   </analog_modulation> -->

    <!--   <mechanical_shutter> -->
    <!-- 	<uses>daq</uses> -->
    <!-- 	<parameters> -->
    <!-- 	  <board>PCI-6221</board> -->
    <!-- 	  <channel type="int">2</channel> -->
    <!-- 	</parameters> -->
    <!--   </mechanical_shutter> -->

    <!-- </channel> -->

    <!-- <!-\- 640 laser -\-> -->
    <!-- <channel> -->
    <!--   <description>640</description> -->
    <!--   <color type="rgb">255,0,0</color> -->
      
    <!--   <analog_modulation> -->
    <!-- 	<uses>daq</uses> -->
    <!-- 	<parameters> -->
    <!-- 	  <board>PCI-6221</board> -->
    <!-- 	  <channel type="int">3</channel> -->
    <!-- 	  <max_voltage type="float">1.0</max_voltage> -->
    <!-- 	  <min_voltage type="float">0.0</min_voltage> -->
    <!-- 	</parameters> -->
    <!--   </analog_modulation> -->

    <!--   <mechanical_shutter> -->
    <!-- 	<uses>daq</uses> -->
    <!-- 	<parameters> -->
    <!-- 	  <board>PCI-6221</board> -->
    <!-- 	  <channel type="int">3</channel> -->
    <!-- 	</parameters> -->
    <!--   </mechanical_shutter> -->

    <!-- </channel> -->

    <!-- <!-\- Lamp -\-> -->
    <!-- <channel> -->
    <!--   <description>White</description> -->
    <!--   <color type="rgb">255,255,255</color> -->
      
    <!--   <analog_modulation> -->
    <!-- 	<uses>daq</uses> -->
    <!-- 	<parameters> -->
    <!-- 	  <board>PCI-6221</board> -->
    <!-- 	  <channel type="int">4</channel> -->
    <!-- 	  <max_voltage type="float">5.0</max_voltage> -->
    <!-- 	  <min_voltage type="float">0.0</min_voltage> -->
    <!-- 	</parameters> -->
    <!--   </analog_modulation> -->

    <!-- </channel> -->

  </channels>

</illumination_settings>
